CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the images by matching files in the folder against the unique text pattern for each stain: d0.tif for nuclei, d1.tif for the PH3 image, d2.tif for the cell stain image. The three images together comprise an image set.']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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Original
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Original
    Name the output image:RescaledBlue
    Rescaling method:Divide by the image's minimum
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei from the nuclear stain image. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:RescaledBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
IdentifySecondaryObjects:[module_num:7|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notes:['Identify the cells by using the nuclei as a “seed” region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:RescaledBlue
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectSizeShape:[module_num:8|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:9|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notes:['Overlay the nucleus outlines on the cropped nuclear image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:OutlinedNuc
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:NucOutlines
    Select outline color:White
    Load outlines from an image or objects?:Image
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
SaveImages:[module_num:10|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notes:['Save the overlay image as an 8-bit TIF, appending the text ‘outline’ to the original filename of the nuclei image.']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
    Select the type of image to save:Image
    Select the image to save:OutlinedNuc
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Outline
    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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